// Author: Etay Hay, 2011
//    Models of Neocortical Layer 5b Pyramidal Cells Capturing a Wide Range of
//    Dendritic and Perisomatic Active Properties
//    (Hay et al., PLoS Computational Biology, 2011) 
//
// Model of L5 Pyramidal Cell, constrained both for BAC firing and Current Step Firing


// Copied and adapted some declarations to work with LFPy from file
// models/L5PCbiophys3.hoc
//
// 28.02.2012 ehagen@umb.no

// Fixed problem of looping over the section lists
//
// 08.06.2012 ehagen@umb.no


Vrest = -65

proc biophys() {
	forall {
	       insert pas
	       cm = 1 
	       Ra = 100
	       e_pas = Vrest
	}

  	forsec "soma" {
	  	insert Ca_LVAst 
	  	insert Ca_HVA 
	  	insert SKv3_1 
	  	insert SK_E2 
	  	insert K_Tst 
	  	insert K_Pst 
	  	insert Nap_Et2 
	  	insert NaTa_t
		insert CaDynamics_E2
		insert Ih
		ek = -85
		ena = 50
		gIhbar_Ih = 0.0002
        g_pas = 0.0000338
  		decay_CaDynamics_E2 = 460.0 
		gamma_CaDynamics_E2 = 0.000501 
  		gCa_LVAstbar_Ca_LVAst = 0.00343 
  		gCa_HVAbar_Ca_HVA = 0.000992 
  		gSKv3_1bar_SKv3_1 = 0.693 
  		gSK_E2bar_SK_E2 = 0.0441 
  		gK_Tstbar_K_Tst = 0.0812 
  		gK_Pstbar_K_Pst = 0.00223 
  		gNap_Et2bar_Nap_Et2 = 0.00172 
  		gNaTa_tbar_NaTa_t = 2.04 
  	}

	forsec "apic" {
		cm = 2
		insert Ih
  		insert SK_E2 
  		insert Ca_LVAst 
  		insert Ca_HVA 
  		insert SKv3_1 
  		insert NaTa_t 
  		insert Im 
  		insert CaDynamics_E2
		ek = -85
		ena = 50
        	decay_CaDynamics_E2 = 122 
        	gamma_CaDynamics_E2 = 0.000509 
        	gSK_E2bar_SK_E2 = 0.0012 
  		gSKv3_1bar_SKv3_1 = 0.000261 
  		gNaTa_tbar_NaTa_t = 0.0213 
  		gImbar_Im = 0.0000675 
  		g_pas = 0.0000589 
	}
	distribute_channels("apic","gIhbar_Ih",2,-0.8696,3.6161,0.0,2.0870,0.00020000000) 
	distribute_channels("apic","gCa_LVAstbar_Ca_LVAst",3,1.000000,0.010000,685.000000,885.000000,0.0187000000) 
	distribute_channels("apic","gCa_HVAbar_Ca_HVA",3,1.000000,0.100000,685.000000,885.000000,0.0005550000) 
	
  	forsec "dend" {
		cm = 2
		insert Ih
		gIhbar_Ih = 0.0002
  		g_pas = 0.0000467 
	}

  	forsec "axon" {
  	       g_pas = 0.0000325 
	}
}


proc init() {
	t=0
	finitialize(Vrest)
    fcurrent()

    forall {
	    for (x) {
	        e_pas(x)=v(x)
	        if (ismembrane("Nap_Et2")||ismembrane("NaTa_t")){e_pas(x)=e_pas(x)+ina(x)/g_pas(x)}
	        if (ismembrane("SKv3_1")||ismembrane("SK_E2")){e_pas(x)=e_pas(x)+ik(x)/g_pas(x)}
	        if (ismembrane("Ih")) {e_pas(x)=e_pas(x)+ihcn_Ih(x)/g_pas(x)}
	        if (ismembrane("Ca_HVA")){e_pas(x)=e_pas(x)+ica(x)/g_pas(x)}
		}
	}
}

//apply model specific stuff
delete_axon()
geom_nseg()
biophys()
init()
